PsychoPy2experiment version="2023.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = syllable_seqA1
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine ma
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ma
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  Routine me
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = me
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  Routine mi
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mi
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  Routine mo
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mo
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  Routine mu
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mu
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  Routine na
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = na
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  Routine ne
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ne
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  Routine ni
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ni
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  Routine no
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = no
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  Routine nu
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nu
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  Routine pa
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pa
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  Routine pe
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pe
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  Routine pi_2
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pi
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  Routine po
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = po
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  Routine pu
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pu
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  Routine ba
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ba
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  Routine be
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = be
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  Routine bi
    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bi
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  Routine bo
    TextComponent text_19
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bo
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  Routine bu
    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bu
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  Routine fa
    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fa
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  Routine fe
    TextComponent text_22
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fe
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  Routine fi
    TextComponent text_23
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fi
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  Routine fo
    TextComponent text_24
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fo
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  Routine fu
    TextComponent text_25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fu
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  Routine sa
    TextComponent text_26
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sa
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  Routine se
    TextComponent text_27
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = se
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  Routine si
    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = si
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  Routine so
    TextComponent text_29
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = so
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  Routine su
    TextComponent text_30
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = su
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  Routine xx
    TextComponent text_31
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xx
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  Routine ISI
    TextComponent text_32
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.7
      text = +
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Flow
  Routine trial
  Routine sa
  Routine ISI
  Routine ma
  Routine ISI
  Routine fe
  Routine ISI
  Routine ma
  Routine ISI
  Routine bi
  Routine ISI
  Routine me
  Routine ISI
  Routine ni
  Routine ISI
  Routine fa
  Routine ISI
  Routine se
  Routine ISI
  Routine su
  Routine ISI
  Routine ne
  Routine ISI
  Routine be
  Routine ISI
  Routine xx
  Routine ISI
  Routine fi
  Routine ISI
  Routine xx
  Routine ISI
  Routine mi
  Routine ISI
  Routine ne
  Routine ISI
  Routine pi_2
  Routine ISI
  Routine mu
  Routine ISI
  Routine pe
  Routine ISI
  Routine su
  Routine ISI
  Routine xx
  Routine ISI
  Routine bo
  Routine ISI
  Routine bu
  Routine ISI
  Routine mu
  Routine ISI
  Routine sa
  Routine ISI
  Routine bo
  Routine ISI
  Routine si
  Routine ISI
  Routine fu
  Routine ISI
  Routine fa
  Routine ISI
  Routine pi_2
  Routine ISI
  Routine pu
  Routine ISI
  Routine bu
  Routine ISI
  Routine fo
  Routine ISI
  Routine po
  Routine ISI
  Routine fu
  Routine ISI
  Routine nu
  Routine ISI
  Routine xx
  Routine ISI
  Routine si
  Routine ISI
  Routine so
  Routine ISI
  Routine pu
  Routine ISI
  Routine no
  Routine ISI
  Routine se
  Routine ISI
  Routine ni
  Routine ISI
  Routine mo
  Routine ISI
  Routine xx
  Routine ISI
  Routine fi
  Routine ISI
  Routine fe
  Routine ISI
  Routine xx
  Routine ISI
  Routine me
  Routine ISI
  Routine ba
  Routine ISI
  Routine xx
  Routine ISI
  Routine po
  Routine ISI
  Routine be
  Routine ISI
  Routine pa
  Routine ISI
  Routine na
  Routine ISI
  Routine no
  Routine ISI
  Routine fo
  Routine ISI
  Routine bi
  Routine ISI
  Routine na
  Routine ISI
  Routine ba
  Routine ISI
  Routine pe
  Routine ISI
  Routine xx
  Routine ISI
  Routine mo
  Routine ISI
  Routine mi
  Routine ISI
  Routine nu
  Routine ISI
  Routine xx
  Routine ISI
  Routine mo
  Routine ISI
  Routine mi
  Routine ISI
  Routine nu
  Routine ISI
  Routine xx
  Routine ISI
  Routine so
  Routine ISI
  Routine pa
  Routine ISI
  Routine xx
  Routine ISI
