PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = word_seqPilot
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine start
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is a test 
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  Routine ISI
    CodeComponent code
      Code Type = Both
      disabled = True
      Begin JS Routine:
        modify = false;
        text.text = "";
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text = +
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  Routine manzana
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = manzana
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    MicrophoneComponent mic
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine salmón
    MicrophoneComponent mic_2
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = salmón
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  Routine fideos
    MicrophoneComponent mic_3
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent s
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = fideos
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  Routine martillo
    MicrophoneComponent mic_4
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = martillo
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  Routine vinagre
    MicrophoneComponent mic_5
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = vinagre
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  Routine xxxx
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxx
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  Routine xxxxx
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxx
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  Routine naranja
    MicrophoneComponent mic_6
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = naranja
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  Routine ficha
    MicrophoneComponent mic_7
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ficha
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  Routine bacalao
    MicrophoneComponent mic_8
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = bacalao
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  Routine nectarina
    MicrophoneComponent mic_9
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nectarina
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  Routine violín
    MicrophoneComponent mic_10
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = violín
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  Routine pasas
    MicrophoneComponent mic_11
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pasas
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  Routine xxxxxx
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxx
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  Routine monitor
    MicrophoneComponent mic_12
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = monitor
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  Routine xxxxxxxx
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxxxx
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  Routine nevera
    MicrophoneComponent mic_14
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nevera
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  Routine palillo
    MicrophoneComponent mic_15
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_19
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = palillo
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  Routine muñeco
    MicrophoneComponent mic_16
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = muñeco
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  Routine pincel
    MicrophoneComponent mic_17
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pincel
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Flow
  Routine start
  Routine manzana
  Routine ISI
  Routine salmón
  Routine ISI
  Routine fideos
  Routine ISI
  Routine martillo
  Routine ISI
  Routine vinagre
  Routine ISI
  Routine xxxx
  Routine ISI
  Routine xxxxx
  Routine ISI
  Routine naranja
  Routine ISI
  Routine ficha
  Routine ISI
  Routine bacalao
  Routine ISI
  Routine nectarina
  Routine ISI
  Routine violín
  Routine ISI
  Routine xxxxxx
  Routine ISI
  Routine monitor
  Routine ISI
  Routine xxxxxxxx
  Routine ISI
  Routine nevera
  Routine ISI
  Routine palillo
  Routine ISI
  Routine muñeco
  Routine ISI
  Routine pincel
